PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': 'SR', 'design': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_featural
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        psychoJS.downloadResources([{name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/edmd.png"), path:("Stimuli/edmd.png")},
        {name: ("Stimuli/eimd.png"), path:("Stimuli/eimd.png")},
        {name: ("Stimuli/eomu.png"), path:("Stimuli/eomu.png")},
        {name: ("Stimuli/eumu.png"), path:("Stimuli/eumu.png")},
        {name: ("Stimuli/f15.png"), path:("Stimuli/f15.png")},
        {name: ("Stimuli/f24.png"), path:("Stimuli/f24.png")},
        {name: ("Stimuli/f131.png"), path:("Stimuli/f131.png")},
        {name: ("Stimuli/f142.png"), path:("Stimuli/f142.png")},
        {name: ("Stimuli/H-8sim0.png"), path:("Stimuli/H-8sim0.png")},
        {name: ("Stimuli/H-8sim1.png"), path:("Stimuli/H-8sim1.png")},
        {name: ("Stimuli/H-8sim2.png"), path:("Stimuli/H-8sim2.png")},
        {name: ("Stimuli/H-8sim3.png"), path:("Stimuli/H-8sim3.png")},
        {name: ("Stimuli/H5sim0.png"), path:("Stimuli/H5sim0.png")},
        {name: ("Stimuli/H6sim0.png"), path:("Stimuli/H6sim0.png")},
        {name: ("Stimuli/H7sim0.png"), path:("Stimuli/H7sim0.png")},
        {name: ("Stimuli/H8sim0.png"), path:("Stimuli/H8sim0.png")},
        {name: ("Designs/design1.png"), path:("Designs/design1.png")},
        {name: ("Designs/design2.png"), path:("Designs/design2.png")},
        {name: ("Designs/design3.png"), path:("Designs/design3.png")},
        {name: ("Designs/design4.png"), path:("Designs/design4.png")},
        {name: ("Designs/design1.csv"), path:("Designs/design1.csv")},
        {name: ("Designs/design2.csv"), path:("Designs/design2.csv")},
        {name: ("Designs/design3.csv"), path:("Designs/design3.csv")},
        {name: ("Designs/design4.csv"), path:("Designs/design4.csv")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_Py
      Code Type = Py
      Begin Experiment:
        from numpy.random import permutation
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height = 3.459
        width = 3.459
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = bankcard.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine target_img
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        imgID = 0
        target = paths[imgID]
    ImageComponent target_image
      image [set every repeat] = $target
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine probe_img
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        imgID = 0
        probe = paths[imgID]
    ImageComponent probe_image
      image [set every repeat] = $probe
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine instrBlock1
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if thisBlock['Block_type'] == 'conf_face':
            paths = ['Stimuli/edmd.png', 'Stimuli/eimd.png', 'Stimuli/eomu.png', 'Stimuli/eumu.png']
        elif thisBlock['Block_type'] == 'conf_haus':
            paths =  ['Stimuli/H-8sim0.png', 'Stimuli/H-8sim1.png', 'Stimuli/H-8sim2.png', 'Stimuli/H-8sim3.png']
        elif thisBlock['Block_type'] == 'feat_face':
            paths =  ['Stimuli/f15.png', 'Stimuli/f24.png', 'Stimuli/f131.png', 'Stimuli/f142.png']
        elif thisBlock['Block_type'] == 'feat_haus':
            paths = ['Stimuli/H5sim0.png', 'Stimuli/H6sim0.png', 'Stimuli/H7sim0.png', 'Stimuli/H8sim0.png']

        trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]), permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
        trial_order = np.round(trial_order / 6 - 0.1)
        trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
        trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
        diffTrial = list(range(12))
        shuffle(diffTrial)

        sameTrialid = 0
        diffTrialid = 0

        instruction_text = thisBlock['instruction_text']
  Routine startInstruct
    CodeComponent code_2
      Code Type = Auto->JS
Flow
  Routine screen_scale
  Routine startInstruct
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = Designs/bad_design/design1.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block_type', 'conf_face'), ('instruction_text', 'Press S for same or D for different faces. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'conf_haus'), ('instruction_text', 'Press S for same or D for different houses. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'feat_face'), ('instruction_text', 'Press S for same or D for different faces. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'feat_haus'), ('instruction_text', 'Press S for same or D for different houses. Press <SPACE> to continue.')])]
    Routine instrBlock1
    Routine target_img
    Routine probe_img
  LoopTerminator blocks
